create    hill,iseg,\
          node[2],\
          inode[3]   

proc geometry() { local i, j

					/* connect primary neurites */
    somaA connect hill (0), 0.5
    hill connect iseg (0), 1
    iseg connect inode[0] (0), 1
    inode[0] connect node[0] (0), 1
    node[0] connect inode[1] (0), 1
    inode[1] connect node[1] (0), 1
    node[1] connect inode[2] (0), 1

					/* neurite geometry*/
    hill {  nseg=10
            pt3dclear()
            for j = 1, fscan() {
                pt3dadd(fscan(),fscan(),fscan(),fscan())
         }
    }

    iseg {  nseg=10
            pt3dclear()
            for j = 1, fscan() {
                pt3dadd(fscan(),fscan(),fscan(),fscan())
         }
    }

    inode[0] { nseg=25
            pt3dclear()
            for j = 1, fscan() {
                pt3dadd(fscan(),fscan(),fscan(),fscan())
         }
    }

    node[0] { nseg=1
            pt3dclear()
            for j = 1, fscan() {
                pt3dadd(fscan(),fscan(),fscan(),fscan())
         }
    }

    inode[1] { nseg=25
            pt3dclear()
            for j = 1, fscan() {
                pt3dadd(fscan(),fscan(),fscan(),fscan())
         }
    }

    node[1] { nseg=1
            pt3dclear()
            for j = 1, fscan() {
                pt3dadd(fscan(),fscan(),fscan(),fscan())
         }
    }

    inode[2] { nseg=25
            pt3dclear()
            for j = 1, fscan() {
                pt3dadd(fscan(),fscan(),fscan(),fscan())
         }
    }

}

geometry()

NEURITE COORDINATES AND DIAMETERS:


     HILLOCK
11
    0.00     0.00     0.00     4.04
   -0.25    -1.00     0.00     3.73
   -0.79    -2.04     0.00     3.44
   -1.27    -3.02     0.00     3.11
   -1.33    -3.96     0.00     2.76
   -1.32    -4.84     0.00     2.40
   -1.50    -5.80     0.00     2.11
   -0.80    -6.82     0.00     1.78
   -0.47    -7.92     0.00     1.39
   -0.30    -8.98     0.00     1.05
   -0.43   -10.04     0.00     1.05

        ISEG
11
   -0.53   -10.04     0.00     0.96
    0.43   -11.56     0.00     1.08
    0.07   -13.07     0.00     0.91
   -0.57   -14.58     0.00     1.16
   -0.60   -16.18     0.00     1.10
   -1.18   -17.72     0.00     0.94
   -1.03   -19.26     0.00     1.08
   -1.17   -20.88     0.00     0.89
   -1.40   -22.35     0.00     0.98
   -1.02   -23.93     0.00     0.95
   -0.90   -25.49     0.00     1.10

      INODE1
51
   -0.90   -25.49     0.00     1.40
   -1.48   -27.59     0.00     1.53
    0.40   -29.60     0.00     1.64
    1.63   -31.59     0.00     1.42
    1.43   -33.73     0.00     1.69
    1.16   -35.92     0.00     1.31
    1.97   -37.95     0.00     1.53
    2.76   -39.90     0.00     1.76
    2.19   -41.79     0.00     1.46
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   -0.65  -124.54     0.00     1.52

       NODE1
2
   -0.65  -124.54     0.00     1.01
    0.00  -125.70     0.00     1.09

      INODE2
51
    0.00  -125.70     0.00     1.39
   -0.76  -127.73     0.00     1.38
   -1.17  -129.64     0.00     1.34
   -1.29  -131.74     0.00     1.47
   -1.47  -133.86     0.00     1.44
   -2.39  -135.72     0.00     1.63
   -1.94  -137.79     0.00     1.62
   -1.61  -139.84     0.00     1.50
    0.50  -141.68     0.00     1.39
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    7.31  -225.06     0.00     1.65

       NODE2
2
    7.31  -225.06     0.00     1.07
    5.10  -225.83     0.00     1.00

      INODE3
51
    5.10  -225.83     0.00     1.48
    4.58  -227.83     0.00     1.55
    4.16  -229.66     0.00     1.34
    4.17  -231.62     0.00     1.53
    4.64  -233.57     0.00     1.61
    2.81  -235.77     0.00     1.44
    1.03  -237.77     0.00     1.35
    0.58  -239.96     0.00     1.47
   -0.65  -242.05     0.00     1.65
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   -0.48  -326.23     0.00     1.56


/*----------------------------------------------------------------*/
proc geometry() { 

	/* NULL geometry procedure: keeps the user from
	calling the geometry procedure in isolation. */

    printf("\nYou must re-read the entire geometry\n")
    printf("file to execute geometry().\n\n")
}

